<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.0/experiment.xsd" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.0/experiment">
  <!-- @doc
  @what: Shows use of child mode: intro and outro movies, but without the child panel; also has button shortcuts to skip the intro or outro movie
  @description: The experiment starts after a silent introductory movie. The child needs to find the stimulus in one of the three eggs. One egg has a different sound than the two other eggs. Feedback is also childfriendly.
  @how: The F7 shortcut can be used to skip the intro and outro movies when <allowskip>true</allowskip> in <general>. Flash elements, button shortcuts are introduced (leftarrow = 1, downarrow = 2, rightarrow = 3, 's' = skipping intro or outro movie),
 -->
  <procedure xsi:type="apex:adaptiveProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <intervals count="3">
        <interval number="1" element="button1"/>
        <interval number="2" element="button2"/>
        <interval number="3" element="button3"/>
      </intervals>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>snr</adapt_parameter>
      <start_value>3</start_value>
      <stop_after_type>reversals</stop_after_type>
      <stop_after>2</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <stepsizes>
        <stepsize size="2" begin="0"/>
        <stepsize size="1" begin="2"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <stimulus id="stimulus2"/>
        <stimulus id="stimulus3"/>
        <stimulus id="stimulus4"/>
        <stimulus id="stimulus5"/>
        <standard id="standard1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <prefix>../movies/</prefix>
    <general>
      <stopbutton>true</stopbutton>
      <repeatbutton>true</repeatbutton>
      <showpanel>false</showpanel>
    </general>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="1000">true</feedback>
      <showcurrent>true</showcurrent>
    </reinforcement>
    <childmode>
      <intro length="5000">intro</intro>
      <outro length="5000">outro</outro>
    </childmode>
    <screen id="screen1">
      <gridLayout height="3" width="3" id="answer_layout" x="1" y="1">
        <flash id="button1" x="1" y="2">
          <shortcut>LeftArrow</shortcut>
          <file>dragon/stillegg.swf</file>
          <feedback>
            <highlight>dragon/shakeegg.swf</highlight>
            <positive>dragon/goodegg.swf</positive>
            <negative>dragon/badegg2.swf</negative>
          </feedback>
        </flash>
        <flash id="button2" x="2" y="2">
          <shortcut>DownArrow</shortcut>
          <file>dragon/stillegg.swf</file>
          <feedback>
            <highlight>dragon/shakeegg.swf</highlight>
            <positive>dragon/goodegg.swf</positive>
            <negative>dragon/badegg2.swf</negative>
          </feedback>
        </flash>
        <flash id="button3" x="3" y="2">
          <shortcut>RightArrow</shortcut>
          <file>dragon/stillegg.swf</file>
          <feedback>
            <highlight>dragon/shakeegg.swf</highlight>
            <positive>dragon/goodegg.swf</positive>
            <negative>dragon/badegg2.swf</negative>
          </feedback>
        </flash>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
    <screen id="intro">
      <gridLayout height="1" width="1" id="ilayout" x="1" y="1">
        <flash id="blah" x="1" y="1">
          <shortcut>s</shortcut>
          <file>dragon/intro.swf</file>
        </flash>
      </gridLayout>
    </screen>
    <screen id="outro">
      <gridLayout height="1" width="1" id="olayout" x="1" y="1">
        <flash id="oblah" x="1" y="1">
          <shortcut>s</shortcut>
          <file>dragon/outro.swf</file>
        </flash>
      </gridLayout>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <file>wd3.wav</file>
    </datablock>
    <datablock id="rawdata4">
      <device>wavdevice</device>
      <file>wd4.wav</file>
    </datablock>
    <datablock id="rawdata5">
      <device>wavdevice</device>
      <file>wd5.wav</file>
    </datablock>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>1024</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    <stimulus id="standard1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">20</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">1</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">2</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">3</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">4</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus5">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata5"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">5</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections/>
  <general>
    <allowskip>true</allowskip>
  </general>
</apex:apex>
