<?xml version='1.0' encoding='UTF-8'?>
<apex:apex version="1" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.0/experiment" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.0/experiment.xsd" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  <!-- @doc
    @what: Combination of silence and signal for 1 stimulus presentation
    @description: The stimulus in this example contains first silence (a delay) before you hear "één"
    @how: Use sequential datablocks that include silence and wavfile/signals, e.g. also possible to put silence datablocks after the wavfile
  -->
  <procedure xsi:type="apex:trainingProcedure">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <screen id="screen1">
      <gridLayout height="2" id="main_layout" width="3">
        <button x="1" id="button1" y="1">
          <text>1</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <description>sample raw datablock</description>
      <file>wd1.wav</file>
    </datablock>
    <!--datablock id="silence1000">
      <device>wavdevice</device>
      <uri>silence:brol</uri>
    </datablock-->
    <datablock id="silence1000">
      <device>wavdevice</device>
      <file>silence:1000</file>
    </datablock>
    <datablock id="silence3">
      <device>wavdevice</device>
      <file>silence:123.5</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <sequential>
          <datablock id="silence1000"/>
          <datablock id="silence3"/>
          <datablock id="rawdata1"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
