<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.2/experiment" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.2/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.2/experiment.xsd">
  <!-- @doc
    @what:
    @description: example already somewhere else as well!
    @how:
  -->
  <!--
  Regression test for adapting device parameters

  Result: gain of device varies according to user input

    -->
  <procedure xsi:type="apex:adaptiveProcedure">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>gain</adapt_parameter>
      <start_value>0</start_value>
      <stop_after_type>presentations</stop_after_type>
      <stop_after>100</stop_after>
      <larger_is_easier>false</larger_is_easier>
      <stepsizes>
        <stepsize size="2" begin="0"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>up</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">false</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="1" id="main_layout" width="3">
        <button id="up" x="1" y="1">
          <text>louder</text>
        </button>
        <button id="down" x="2" y="1">
          <text>quieter</text>
        </button>
        <parameterlist id="pl" x="3" y="1">
          <parameter>gain</parameter>
        </parameterlist>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="up"/>
        <button id="down"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
    </device>
  </devices>
  <filters>
    <filter xsi:type="apex:pluginfilter" id="pluginfilter">
      <device>wavdevice</device>
      <channels>1</channels>
      <continuous>false</continuous>
      <plugin>amplifier</plugin>
      <parameter name="gain" id="gain">-10</parameter>
    </filter>
  </filters>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections>
    <connection>
      <from>
        <id>_ALL_</id>
        <channel>0</channel>
      </from>
      <to>
        <id>pluginfilter</id>
        <channel>0</channel>
      </to>
    </connection>
    <!--connection>
      <from>
        <id>_ALL_</id>
        <channel>1</channel>
      </from>
      <to>
        <id>pluginfilter</id>
        <channel>1</channel>
      </to>
    </connection-->
    <connection>
      <from>
        <id>pluginfilter</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>0</channel>
      </to>
    </connection>
    <!--connection>
      <from>
        <id>pluginfilter</id>
        <channel>1</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>1</channel>
      </to>
    </connection-->
  </connections>
</apex:apex>
