<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.1/experiment" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.1/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.1/experiment.xsd" version="1">
  <!-- @doc
  @what: Change parameter (gain) of device channel
  @description: gain of device varies in RIGHT channel according to user input (1 button = louder, 1 button = quieter) + gain is visible on screen
  @how: adaptive procedure, fixed (stimulus) and variable (gain) parameters, stepsize of 2 dB, Parameterlists are introduced that show Left or Right gain on the screen
-->
  <procedure xsi:type="apex:adaptiveProcedure">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>gainR</adapt_parameter>
      <start_value>0</start_value>
      <stop_after_type>presentations</stop_after_type>
      <stop_after>100</stop_after>
      <larger_is_easier>false</larger_is_easier>
      <stepsizes>
        <stepsize begin="0" size="2"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>up</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">false</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout" height="1" width="3">
        <button x="1" y="1" id="up">
          <text>louder</text>
        </button>
        <button x="2" y="1" id="down">
          <text>quieter</text>
        </button>
        <parameterlist x="3" y="1" id="pl">
          <parameter>gainL</parameter>
          <parameter>gainR</parameter>
        </parameterlist>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="up"/>
        <button id="down"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
    </device>
  </devices>
  <filters>
    <filter id="amplifier" xsi:type="apex:amplifier">
      <device>wavdevice</device>
      <channels>2</channels>
      <basegain>0</basegain>
      <gain id="gainL" channel="0">0</gain>
      <gain id="gainR" channel="1">0</gain>
    </filter>
  </filters>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections>
    <connection>
      <from>
        <id>_ALL_</id>
        <channel>0</channel>
      </from>
      <to>
        <id>amplifier</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>_ALL_</id>
        <channel>1</channel>
      </from>
      <to>
        <id>amplifier</id>
        <channel>1</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>amplifier</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>amplifier</id>
        <channel>1</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>1</channel>
      </to>
    </connection>
  </connections>
</apex:apex>
