<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.2/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.2/experiment.xsd" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.2/experiment" version="1">
  <!-- @doc
  @what: Error message because #presentations is not equal to #stop_after
  @description: Point of interest if you want to stop the experiment after some presentations! => #presentations = #stop_after
  @how: procedure: presentations - stop_after
 -->
  <procedure xsi:type="apex:adaptiveProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <intervals count="3">
        <interval number="1" element="button1"/>
        <interval number="2" element="button2"/>
        <interval number="3" element="button3"/>
      </intervals>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>snr</adapt_parameter>
      <start_value>3</start_value>
      <stop_after_type>presentations</stop_after_type>
      <stop_after>4</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <stepsizes>
        <stepsize size="2" begin="0"/>
        <stepsize size="1" begin="2"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <stimulus id="stimulus2"/>
        <stimulus id="stimulus3"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="2" id="main_layout" width="3">
        <label row="1" id="l1" col="1">
          <text>correct answer:</text>
        </label>
        <answerlabel row="1" id="al" col="2"/>
        <button row="2" id="button1" col="1">
          <text>eerste</text>
        </button>
        <button row="2" id="button2" col="2">
          <text>tweede</text>
        </button>
        <button row="2" id="button3" col="3">
          <text>derde</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <file>wd3.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">1</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">2</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">3</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
