<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.0/experiment" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.0/experiment.xsd">
  <!-- @doc
  @what: Regression test - 4 Intervals - 4 Choices, select interval 2-3
  @description: Four intervals are possible= 'noise noise noise een', 'noise noise een noise', 'noise een noise noise' and 'een noise noise noise'. However only possibility number "2" and "3" are selected
                So you can hear 'noise een noise noise' or 'noise noise een noise'. You have to click on the button corresponding with "een'.
  @how: constantProcedure - intervals- count/possibilities: 4, select(ion): 2 and 3
-->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <intervals count="4" select="2,3">
        <interval element="button1" number="1"/>
        <interval element="button2" number="2"/>
        <interval element="button3" number="3"/>
        <interval element="button4" number="4"/>
      </intervals>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <standard id="standard1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">false</feedback>
      <showcurrent>true</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout width="4" id="main_layout" height="1">
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        <button x="2" y="1" id="button2">
          <text>2</text>
        </button>
        <button x="3" y="1" id="button3">
          <text>3</text>
        </button>
        <button x="4" y="1" id="button4">
          <text>4</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    <stimulus id="standard1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">20</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">1</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
