<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.2/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.2/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.2/experiment.xsd">
  <!-- @doc
    @what: Multiprocedure - 2 constantprocedures with each their own parameters, procedure and trials - 2 different choices of intervals
    @description: 2 procedures => procedure1/procedure2: 1trial - 3intervals - Match the stimulus (place of stimulus within noise) with the correct button
    @how: procedure => multiProcedure - intervals/choices - 3 choices - standardstimulus:noise
  -->
  <procedure xsi:type="apex:multiProcedure">
    <parameters>
      <order>sequential</order>
    </parameters>
    <procedure id="procedure1" xsi:type="apex:constantProcedure">
      <parameters>
        <presentations>3</presentations>
        <skip>0</skip>
        <order>sequential</order>
        <intervals count="3">
          <interval number="1" element="button1"/>
          <interval number="2" element="button2"/>
          <interval number="3" element="button3"/>
        </intervals>
      </parameters>
      <trials>
        <trial id="trial1">
          <screen id="screen1"/>
          <stimulus id="stimulus1"/>
          <standard id="standard"/>
        </trial>
      </trials>
    </procedure>
    <procedure id="procedure2" xsi:type="apex:constantProcedure">
      <parameters>
        <presentations>3</presentations>
        <skip>0</skip>
        <order>sequential</order>
        <intervals count="3">
          <interval number="1" element="button4"/>
          <interval number="2" element="button5"/>
          <interval number="3" element="button6"/>
        </intervals>
      </parameters>
      <trials>
        <trial id="trial4">
          <screen id="screen2"/>
          <stimulus id="stimulus2"/>
          <standard id="standard"/>
        </trial>
      </trials>
    </procedure>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout1" width="3" height="1">
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        <button x="2" y="1" id="button2">
          <text>1</text>
        </button>
        <button x="3" y="1" id="button3">
          <text>1</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
    <screen id="screen2">
      <gridLayout id="main_layout1" width="3" height="1">
        <button x="1" y="1" id="button4">
          <text>2</text>
        </button>
        <button x="2" y="1" id="button5">
          <text>2</text>
        </button>
        <button x="3" y="1" id="button6">
          <text>2</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup2">
        <button id="button4"/>
        <button id="button5"/>
        <button id="button6"/>
      </buttongroup>
      <default_answer_element>buttongroup2</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="noise">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="standard">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noise"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
