<?xml version='1.0' encoding='UTF-8'?>
<apex:apex version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.0/experiment" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.0/experiment.xsd">
  <!-- @doc
    @what: Multiple standards - Unique standard
    @description: 2 trials: trial1 = match one of the button with the noise-stimulus (standards/reference-signals = numbers)
                            trial2 = match one of the buttons with the stimulus '2' (standards/reference-signals = noise)
    @how: 2 trials - constantProcedure
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <uniquestandard>true</uniquestandard>
      <!-- If you have multiple standard-stimuli (see trial1), apex will try to present another standard in each interval of the trial -->
      <intervals count="5">
        <interval element="button1" number="1"/>
        <interval element="button2" number="2"/>
        <interval element="button3" number="3"/>
        <interval element="button4" number="4"/>
        <interval element="button5" number="5"/>
      </intervals>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="standard1"/>
        <standard id="stimulus1"/>
        <standard id="stimulus2"/>
        <standard id="stimulus3"/>
        <standard id="stimulus4"/>
        <standard id="stimulus5"/>
      </trial>
      <trial id="trial2">
        <screen id="screen2"/>
        <stimulus id="stimulus2"/>
        <standard id="standard1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout" width="5" height="1">
        <button id="button1" x="1" y="1">
          <text>noise</text>
        </button>
        <button id="button2" x="2" y="1">
          <text>noise</text>
        </button>
        <button id="button3" x="3" y="1">
          <text>noise</text>
        </button>
        <button id="button4" x="4" y="1">
          <text>noise</text>
        </button>
        <button id="button5" x="5" y="1">
          <text>noise</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
        <button id="button5"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
    <screen id="screen2">
      <gridLayout id="main_layout" width="5" height="1">
        <button id="button1" x="1" y="1">
          <text>2</text>
        </button>
        <button id="button2" x="2" y="1">
          <text>2</text>
        </button>
        <button id="button3" x="3" y="1">
          <text>2</text>
        </button>
        <button id="button4" x="4" y="1">
          <text>2</text>
        </button>
        <button id="button5" x="5" y="1">
          <text>2</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
        <button id="button5"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <file>wd3.wav</file>
    </datablock>
    <datablock id="rawdata4">
      <device>wavdevice</device>
      <file>wd4.wav</file>
    </datablock>
    <datablock id="rawdata5">
      <device>wavdevice</device>
      <file>wd5.wav</file>
    </datablock>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="standard1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus5">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata5"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
