<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.1/experiment" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.1/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.1/experiment.xsd">
  <!-- @doc
  @what:  a pause of 500ms should be introduced between the stimulus and the standards
  @description: 1 trials (10 presentations => 10x) - You hear a stimulus (1-2-3-4-5-6) in both ears - Typ the answer/stimulus (een, twee, drie, ...) in the textbox below 'answer'.
  @how: pause between stimuli (in seconds)
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <intervals count="3">
        <interval element="button1" number="1"/>
        <interval element="button2" number="2"/>
        <interval element="button3" number="3"/>
      </intervals>
      <pause_between_stimuli>1000</pause_between_stimuli>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <standard id="standard1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">false</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout" width="3" height="1">
        <button y="1" id="button1" x="1">
          <text>een</text>
        </button>
        <button y="1" id="button2" x="2">
          <text>een</text>
        </button>
        <button y="1" id="button3" x="3">
          <text>een</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
    <datablock id="rawdata">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="standard1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
