<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.2/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.2/experiment.xsd" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.2/experiment" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  <!-- @doc
  @what: Demonstrate the misapplication of <samplerate>
  @description: <samplerate> specifies the sampling frequency of the sound card. If the samplerate of the sound card doens't match to the sample rate of the wav.files, you will get an error when you try to open your experiment in apex.
  @how: wrong sample frequency specified in <samplerate> -> the sample frequency (here 72000) should match the sample frequency of your wav.files (here 44100)
  -->
  <procedure xsi:type="apex:trainingProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>wrong</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>false</progressbar>
      <feedback>false</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout width="2" x="1" y="2" height="2" id="answer_layout">
        <button x="1" y="1" id="correct">
          <text>Correct</text>
        </button>
        <button x="2" y="1" id="wrong">
          <text>Wrong</text>
        </button>
        <textEdit x="1" y="2" id="dieeditdie">
          <fontsize>26</fontsize>
          <inputmask>numbers</inputmask>
        </textEdit>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="correct"/>
        <button id="wrong"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="wd1">
      <device>soundcard</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="wd2">
      <device>soundcard</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="noisedata">
      <device>soundcard</device>
      <file>wivineruis.wav</file>
    </datablock>
    <datablock id="silence">
      <device>soundcard</device>
      <file>silence:1000</file>
      <channels>1</channels>
    </datablock>
  </datablocks>
  <devices>
    <master>soundcard</master>
    <device xsi:type="apex:wavDeviceType" id="soundcard">
      <driver>asio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>72000</samplerate>
    </device>
  </devices>
  <filters>
    <filter xsi:type="apex:dataloop" id="noisegen">
      <device>soundcard</device>
      <channels>1</channels>
      <continuous>true</continuous>
      <datablock>noisedata</datablock>
      <basegain>-16</basegain>
      <gain id="noisegain">0</gain>
      <randomjump>true</randomjump>
    </filter>
    <!--filter id="noisegen" xsi:type="apex:generator">
      <device>soundcard</device>
      <channels>1</channels>
      <continuous>false</continuous>
      <type>singlepulse</type>
      <basegain>0</basegain>
      <gain>0</gain>
      <frequency>0</frequency>
      <phase>0</phase>
    </filter-->
    <filter xsi:type="apex:amplifier" id="amp">
      <device>soundcard</device>
      <channels>2</channels>
      <gain channel="0" id="left">6.0</gain>
      <gain channel="1" id="right">6.0</gain>
    </filter>
  </filters>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <sequential>
          <simultaneous>
            <datablock id="silence"/>
            <datablock id="wd1"/>
          </simultaneous>
          <datablock id="wd2"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Blaaaablaabaa</description>
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="wd1"/>
        </sequential>
      </datablocks>
      <!--datablocks>
        <sequential>
          <datablock id="wd2" />
          <datablock id="wd1" />
        </sequential>
      </datablocks-->
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections>
    <connection>
      <from>
        <id>wd1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>wd1</id>
        <channel>1</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>1</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>wd2</id>
        <channel>0</channel>
      </from>
      <to>
        <id>amp</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>wd2</id>
        <channel>1</channel>
      </from>
      <to>
        <id>amp</id>
        <channel>1</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>amp</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>amp</id>
        <channel>1</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>1</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>silence</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>noisegen</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>0</channel>
      </to>
    </connection>
  </connections>
</apex:apex>
