<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.0/experiment" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.0/experiment.xsd" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" version="1">
  <!-- @doc
  @what: feedback without highlighting
  @description: When clicking a button, a feedback picture (thumb up or down) is shown in the right panel and NO elements are highlighted.
  @how: <feedback_on>: none
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>5</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button_correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="1000">true</feedback>
      <feedback_on>none</feedback_on>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout" width="2" height="1">
        <button x="1" y="1" id="button_correct">
          <text>1</text>
        </button>
        <button x="2" y="1" id="button_wrong">
          <text>2</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button_correct"/>
        <button id="button_wrong"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
