<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.4/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.4/experiment.xsd" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.4/experiment">
  <!-- @doc
  @what: Shows full use of flash movies, but without the actual childmode
  @description: Corresponding flash movies are shown during presentation of the stimuli and after clicking the correct/wrong button.
  !take care to set the feedback length long enough to play the movie
  @how: introduce flash elements: <flash>, <uri>, <feedback>
  -->
  <procedure xsi:type="apex:adaptiveProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <intervals count="3">
        <interval element="button1" number="1"/>
        <interval element="button2" number="2"/>
        <interval element="button3" number="3"/>
      </intervals>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>snr</adapt_parameter>
      <start_value>3</start_value>
      <stop_after_type>reversals</stop_after_type>
      <stop_after>2</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <stepsizes>
        <stepsize size="2" begin="0"/>
        <stepsize size="1" begin="2"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <stimulus id="stimulus2"/>
        <stimulus id="stimulus3"/>
        <stimulus id="stimulus4"/>
        <stimulus id="stimulus5"/>
        <standard id="standard1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>false</progressbar>
      <feedback length="3600">true</feedback>
      <showcurrent>true</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout width="3" x="1" y="1" id="answer_layout" height="3">
        <flash x="1" y="2" id="button1">
          <file>../movies/dragon/stillegg.swf</file>
          <feedback>
            <highlight>../movies/dragon/shakeegg.swf</highlight>
            <positive>../movies/dragon/goodegg.swf</positive>
            <negative>../movies/dragon/badegg2.swf</negative>
          </feedback>
        </flash>
        <flash x="2" y="2" id="button2">
          <file>../movies/dragon/stillegg.swf</file>
          <feedback>
            <highlight>../movies/dragon/shakeegg.swf</highlight>
            <positive>../movies/dragon/goodegg.swf</positive>
            <negative>../movies/dragon/badegg2.swf</negative>
          </feedback>
        </flash>
        <flash x="3" y="2" id="button3">
          <file>../movies/dragon/stillegg.swf</file>
          <feedback>
            <highlight>../movies/dragon/shakeegg.swf</highlight>
            <positive>../movies/dragon/goodegg.swf</positive>
            <negative>../movies/dragon/badegg2.swf</negative>
          </feedback>
        </flash>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <file>wd3.wav</file>
    </datablock>
    <datablock id="rawdata4">
      <device>wavdevice</device>
      <file>wd4.wav</file>
    </datablock>
    <datablock id="rawdata5">
      <device>wavdevice</device>
      <file>wd5.wav</file>
    </datablock>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    <stimulus id="standard1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">20</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">1</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">2</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">3</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">4</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus5">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata5"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">5</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
