<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.0/experiment.xsd" version="1" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.0/experiment">
  <!-- @doc
  @what: shows how to use an 'apexconfig' as a prefix for a filename
  @description:  idem
  @how: <uri_prefix source="apexconfig">pictures</uri_prefix>
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <prefix source="apexconfig">pictures</prefix>
    <screen id="screen1">
      <gridLayout id="main_layout" width="2" height="1">
        <picture y="1" id="picture_1" x="1">
          <file>1.png</file>
        </picture>
      </gridLayout>
      <default_answer_element>picture_1</default_answer_element>
    </screen>
  </screens>
  <datablocks/>
  <devices/>
  <filters/>
  <stimuli>
    <fixed_parameters>
      <parameter id="fixed"/>
    </fixed_parameters>
    <stimulus id="stimulus1">
      <description/>
      <datablocks/>
      <variableParameters/>
      <fixedParameters>
        <parameter id="fixed">0</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
