<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.4/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.4/experiment.xsd" version="1" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.4/experiment">
  <!-- @doc
  @what: shows how to implement a parameterlabel on the screen
  @description: A parameterlabel is shown on the screen, i.e. a label containg the value of a parameter.
  @how: screen: <parameterlabel>, stimuli: define parameter
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>1</presentations>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button2</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
      <trial id="trial3">
        <answer>button3</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus3"/>
      </trial>
      <trial id="trial4">
        <answer>button4</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus4"/>
      </trial>
      <trial id="trial5">
        <answer>button5</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus5"/>
      </trial>
      <trial id="trial6">
        <answer>button6</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus6"/>
      </trial>
    </trials>
  </procedure>
  <!--type>isequal</type-->
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout width="1" height="2" id="g1">
        <parameterlabel col="1" id="pl" row="1">
          <parameter>stimparam</parameter>
        </parameterlabel>
        <gridLayout width="3" col="1" height="2" id="main_layout" row="2">
          <button x="1" y="1" id="button1">
            <text>1</text>
          </button>
          <button x="2" y="1" id="button2">
            <text>2</text>
          </button>
          <button x="3" y="1" id="button3">
            <text>3</text>
          </button>
          <button x="1" y="2" id="button4">
            <text>4</text>
          </button>
          <button x="2" y="2" id="button5">
            <text>5</text>
          </button>
          <button x="3" y="2" id="button6">
            <text>6</text>
          </button>
        </gridLayout>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
        <button id="button5"/>
        <button id="button6"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <description>sample raw datablock</description>
      <file>wd3.wav</file>
    </datablock>
    <datablock id="rawdata4">
      <device>wavdevice</device>
      <file>wd4.wav</file>
    </datablock>
    <datablock id="rawdata5">
      <device>wavdevice</device>
      <file>wd5.wav</file>
    </datablock>
    <datablock id="rawdata6">
      <device>wavdevice</device>
      <file>wd6.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain channel="0">0</gain>
      <samplerate>44100</samplerate>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters>
      <parameter id="stimparam"/>
    </fixed_parameters>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="stimparam">stimulus 1</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="stimparam">stimulus 2</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="stimparam">stimulus 3</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="stimparam">stimulus 4</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus5">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata5"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="stimparam">stimulus 5</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus6">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata6"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="stimparam">stimulus 6</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
