<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.2/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.2/experiment.xsd" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.2/experiment">
  <!-- @doc
  @what: Demonstrate the use of padzero
  @description: Add the given number of empty (filled with zero's) buffers to the output on the end of a stream. This avoids dropping of the last frames on some soundcards.
  @how: Devices: Add padzero function (e.g. <padzero>2</padzero>)
 -->
  <procedure xsi:type="apex:trainingProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>false</progressbar>
      <feedback>false</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout x="1" width="2" y="2" id="answer_layout" height="2">
        <button x="1" y="1" id="correct">
          <text>OK</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="correct"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="wd1">
      <device>soundcard</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <master>soundcard</master>
    <device id="soundcard" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <padzero>2</padzero>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="wd1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections>
    <connection>
      <from>
        <id>wd1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>0</channel>
      </to>
    </connection>
  </connections>
</apex:apex>
