<?xml version='1.0' encoding='ISO-8859-1'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.0/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.0/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.0/experiment.xsd">
  <!-- Generated by the Apex 3 matlab API -->
  <procedure xsi:type="apex:adaptiveProcedure">
    <parameters>
      <presentations>1</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:alternatives">
        <answers>
          <answer number="2" value="test"/>
        </answers>
      </corrector>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>gain</adapt_parameter>
      <start_value>-18</start_value>
      <stop_after_type>presentations</stop_after_type>
      <stop_after>1</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <repeat_first_until_correct>true</repeat_first_until_correct>
      <stepsizes>
        <stepsize begin="0" size="2"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial_ag15">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag15"/>
      </trial>
      <trial id="trial_ag2">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag2"/>
      </trial>
      <trial id="trial_ag27">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag27"/>
      </trial>
      <trial id="trial_ag31">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag31"/>
      </trial>
      <trial id="trial_ag43">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag43"/>
      </trial>
      <trial id="trial_ag56">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag56"/>
      </trial>
      <trial id="trial_ag68">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag68"/>
      </trial>
      <trial id="trial_ag74">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag74"/>
      </trial>
      <trial id="trial_ag89">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag89"/>
      </trial>
      <trial id="trial_ag90">
        <answer>correct</answer>
        <screen id="screen"/>
        <stimulus id="stimulus_ag90"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">false</feedback>
    </reinforcement>
    <screen id="screen">
      <gridLayout width="1" height="2" id="main_layout">
        <!--answerlabel x="1" y="1" id="helplabel"/-->
        <parameterlist x="1" y="1" id="parameterlist">
          <parameter name="snr">gain</parameter>
          <parameter>sentence</parameter>
        </parameterlist>
        <gridLayout width="2" x="1" y="2" height="1" id="answer_layout">
          <button x="1" y="1" id="correct">
            <text>Correct</text>
          </button>
          <button x="2" y="1" id="wrong">
            <text>Wrong</text>
          </button>
        </gridLayout>
      </gridLayout>
      <buttongroup id="buttongroup">
        <button id="correct"/>
        <button id="wrong"/>
      </buttongroup>
      <default_answer_element>buttongroup</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="datablock_ag15">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag2">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag27">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag31">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag43">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag56">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag68">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag74">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag89">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="datablock_ag90">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <uri>wivineruis.wav</uri>
    </datablock>
    <datablock id="silence">
      <device>wavdevice</device>
      <uri>silence:500</uri>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain id="cardgain">0</gain>
      <samplerate>44100</samplerate>
      <padzero>1</padzero>
    </device>
  </devices>
  <filters>
    <filter id="noisegen" xsi:type="apex:dataloop">
      <device>wavdevice</device>
      <channels>1</channels>
      <continuous>true</continuous>
      <datablock>noisedata</datablock>
      <basegain>-3.8685</basegain>
      <gain id="noisegen_gain">0</gain>
      <randomjump>true</randomjump>
    </filter>
    <filter id="amplifier" xsi:type="apex:amplifier">
      <device>wavdevice</device>
      <channels>1</channels>
      <basegain>-5</basegain>
      <gain id="gain">0</gain>
    </filter>
  </filters>
  <stimuli>
    <fixed_parameters>
      <parameter id="sentence"/>
    </fixed_parameters>
    <stimulus id="stimulus_ag15">
      <datablocks>
        <sequential>
          <sequential>
            <datablock id="silence"/>
            <datablock id="datablock_ag15"/>
            <datablock id="silence"/>
            <simultaneous>
              <datablock id="silence"/>
              <datablock id="datablock_ag15"/>
              <datablock id="silence"/>
            </simultaneous>
          </sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag15"/>
          <datablock id="silence"/>
          <simultaneous>
            <datablock id="silence"/>
            <datablock id="datablock_ag15"/>
            <datablock id="silence"/>
          </simultaneous>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="sentence">15</parameter>
      </variableParameters>
      <fixedParameters>
        <parameter id="sentence">15</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag2">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag2"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">2</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag27">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag27"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">27</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag31">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag31"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">31</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag43">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag43"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">43</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag56">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag56"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">56</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag68">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag68"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">68</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag74">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag74"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">74</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag89">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag89"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">89</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus_ag90">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="datablock_ag90"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">90</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="calibrationstimulus">
      <datablocks>
        <sequential>
          <datablock id="silence"/>
          <datablock id="silence"/>
          <datablock id="silence"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="sentence">calibration</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections>
    <connection>
      <from>
        <id>_ALL_</id>
        <channel>0</channel>
      </from>
      <to>
        <id>amplifier</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>amplifier</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>noisegen</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>0</channel>
      </to>
    </connection>
  </connections>
  <calibration profile="a3speech">
    <stimuli>
      <stimulus id="calibrationstimulus"/>
    </stimuli>
    <parameters>
      <parameter id="cardgain">
        <targetamplitude>65</targetamplitude>
        <mute>-150</mute>
      </parameter>
    </parameters>
  </calibration>
  <results>
    <xsltscript>mao.xsl</xsltscript>
    <showresults>true</showresults>
    <saveprocessedresults>true</saveprocessedresults>
    <subject/>
  </results>
  <interactive>
    <entry default="-10" description="SNR start value" expression="/apex:apex/procedure/parameters/start_value" type="int"/>
    <entry default="" description="Subject name" expression="/apex:apex/results/subject" type="string"/>
  </interactive>
  <general>
    <exitafter>true</exitafter>
  </general>
</apex:apex>
