<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.0/experiment.xsd" version="1" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.0/experiment">
  <!-- @doc
  @what: Demonstrate a screen generated by javascript
  @description: The screen is automatically generated in this experiment using javascript
  @how: using pluginscreens, setting the pluginparameters and referring to the wanted javascript in <screens> (here screengenerator-multiscreen.js)
 -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>1</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="simplescreen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button1</answer>
        <screen id="simplescreen2"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <pluginscreens>
      <script source="file">screengenerator-multiscreen.js</script>
      <parameter name="number">3</parameter>
      <parameter name="string">string</parameter>
      <parameter name="id1">simplescreen1</parameter>
      <parameter name="id2">simplescreen2</parameter>
    </pluginscreens>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain channel="0">-50</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
