<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.2/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.2/experiment.xsd" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" version="1" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.2/experiment">
  <!-- @doc
  @what: Demonstrate stimuli generated by javascript
  @description: The stimuli are automatically generated in this experiment using javascript
  @how: using pluginstimuli, setting the pluginparameters and referring to the wanted javascript in <stimuli> (here stimulusgenerator.js)
 -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>1</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout width="1" height="1">
        <button id="button">
          <text>button</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup">
        <button id="button"/>
      </buttongroup>
      <default_answer_element>buttongroup</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain channel="0">-50</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <pluginstimuli>
      <script source="file">stimulusgenerator.js</script>
      <parameter name="id">stimulus1</parameter>
    </pluginstimuli>
  </stimuli>
  <connections/>
</apex:apex>
